CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Add images into this section when using the GUI to test segmentation parameters. Remove prior to exporting as a cppipe file and before using in command line.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Find metadata from both the image file names (well, site, channel) and folders (plate).']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-H]{1}[0-9]{2})(?P<Site>[f]{1}[0-9]{2})(?P<Channel>[d]{1}[0-4]{1})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Plate>localhost[\w-]*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Assign channels to names.', '', 'Changed channel name for d2 from Golgi to PM as that is better name since plasma membrane is the bigger organelle.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:PM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d3")
    Name to assign these images:Mitochondria
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d4")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['Group by plate to run independently of each other.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Note: Blurry images seem to be segmenting very well -> almost better than sharper images', 'This is struggling with two nuclei close together even with the best parameters.', '', 'This module segments the nuclei from the Hoechst channel.', '', 'This does the best for all plates, but struggles greatly if there are smudges/blur (being measured).']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['This module segments the whole cells (these parameters are the best for the dataset at the current moment).', '', "We decided to use actin as the channel to segment whole cells because it seems to do the best at getting at the whole cell compared to plasma membrane. But actin does struggle if a cells actin is very light and it doesn't detect it, which plasma membrane does better.", '', 'These work very well for the first two plates, but the third plate has such a high count of cell per FOV that it is greatly impacting the ability to segment even if using plasma membrane or actin.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:7|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notes:['This module will identify the cytoplasm object based on subtracting the nuclei from the cell objects.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Hoechst
    Name the output image:NucleiOverlayHoechst
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:Nuclei

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOverlayOnly
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:Nuclei

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Actin
    Name the output image:CellsOverlayActin
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:Cells

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellsOverlayOnly
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:Cells

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlayHoechst
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiOverlayHoechst
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|coSMicQC/docs/manuscripts/cosmicqc_paper_v1/figure_3/whole_FOV_examples
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlayOnly
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiOverlayOnly
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|coSMicQC/docs/manuscripts/cosmicqc_paper_v1/figure_3/whole_FOV_examples
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CellsOverlayActin
    Select method for constructing file names:From image filename
    Select image name for file prefix:Actin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellsOverlayActin
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|coSMicQC/docs/manuscripts/cosmicqc_paper_v1/figure_3/whole_FOV_examples
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:CellsOverlayOnly
    Select method for constructing file names:From image filename
    Select image name for file prefix:Actin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellsOverlayOnly
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|coSMicQC/docs/manuscripts/cosmicqc_paper_v1/figure_3/whole_FOV_examples
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureColocalization:[module_num:16|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notes:['This module measures colocalization for both the whole images and for each object.']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enabled:False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
    Select images to measure:Actin, ER, Hoechst, Mitochondria, PM
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:17|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notes:['This module measures image granularity by default and we have the parameter "measure within objects" turned on so that object measurements for granularity are measured.']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enabled:False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
    Select images to measure:Actin, ER, Hoechst, Mitochondria, PM
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:18|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notes:['This module measures the intensity within each individual object']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enabled:False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
    Select images to measure:Actin, ER, Hoechst, Mitochondria, PM
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureImageIntensity:[module_num:19|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notes:['This is set to measure intensity for the whole image.']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enabled:False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
    Select images to measure:Actin, ER, Hoechst, Mitochondria, PM
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectNeighbors:[module_num:20|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notes:['This measures adjacent nuclei neighbors.']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enabled:False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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:21|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notes:['This measures adjacent cell neighbors (would be the same as cytoplasm so there is no module for that object).']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enabled:False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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:22|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notes:['This module measures the intensity distribution within the objects using the center x,y coordinates for each object (not using the other options as it seems better to measure within the whole objects unlike what happens in the other options).']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enabled:False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
    Select images to measure:Actin, ER, Hoechst, Mitochondria, PM
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:23|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notes:['This measures the size and shape (among other measurements) for the objects.']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enabled:False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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:24|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notes:['This module will measure the texture within the objects and whole images.']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enabled:False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
    Select images to measure:Actin, ER, Hoechst, Mitochondria, PM
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ExportToDatabase:[module_num:25|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notes:['This module outputs an sqlite file with all of the image and object features for eahc plate in individual folders.', '', 'The previous module to measure image quality was removed since image quality should be run on raw, uncorrected images.']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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|CFReT_data_8bit_run/main_CFReT_analysis_output/\g<Plate>
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:cfret_features.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:CFReT
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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